// This template started from version BS0284 (BS0284-corticospinal-v29.zip), then added new ion channels (calcium, kca, etc.)
// $Id: PTcell.hoc,v 1.5 2011/12/02 17:28:02 samn Exp $ 
// 2015-06-30: Added apical subsets:
//   Six new subsets of apical dendrites, to be used for distribution
//   of dendritic conductances, such as Ih/HCN.
//   apical_maintrunk, apical_oblique, apical_uppertrunk, apical_tuft, apical_beforebranchpoint, apical_afterbranchpoint

// load_file("morph.hoc")

/* *********************************************************** */

Vrest       = -90.220509483
v_init = -70.0432010302
celsius = 34.0 // same as experiment
tstop       = 3000
curr        = 0.300 // stimulus amplitude

// passive properties (optimization proxies)
cap         = 0.700445928608
rall        = 137.494564931
rm          = 38457.4393085
spinecapfactor = 1.48057846279

//Na, K reversal potentials calculated from BenS internal and external solutions via Nernst equation
p_ek          = -104
p_ena         = 42

// h-current 
h_erev      = -37.0 
h_gbar      = 6.6129403774e-05 //* 0.1 // mho/cm^2
h_gbar_tuft = 0.00565 // mho/cm^2 (based on Harnett 2015 J Neurosci)

// params for migliore h-current distribution
ghd = 6.0e-5  // similar to h_gbar used above = 6e-5
slope = 14*2.5
half = 265 // leads to max sigmoid value of ~0.006 from nexus (~297um) to tuft; similar to h_gbar_tuft

// d-current 
kdmc_gbar   =  0.00110907315064 //0.000916263431341 
kdmc_gbar_axonm = 20

// spiking currents
nax_gbar    =  0.0153130368342 // 0.0 S/cm2 (Hay11 = 20,000 pS/um2 = 20,000*1e-12*1e8 = 2 S/cm2)
nax_gbar_axonm = 5
nax_gbar_somam = 1
nax_gbar_dendm = 1
mnax = 0.0 // slope of linear decrease of nax in dends (with distance from soma)

kdr_gbar    = 0.0084715576279
kdr_gbar_axonm = 5
// A few kinetic params changed vis-a-vis kdr.mod defaults:
// These param values match the default values in kdr.mod (except where indicated).
kdr_vhalfn  = 13
kdr_a0n     = 0.0075 // def 0.02
kdr_nmax    = 20 // def 2

kap_gbar    = 0.0614003391814
kap_gbar_axonm = 5
// These param values match the default values in kap.mod (except where indicated).
kap_vhalfn  = 35 // def 11
kap_vhalfl  = -56
kap_nmin    = 0.4 // def 0.1
kap_lmin    = 5 // def 2
kap_tq      = -45 // def -40

// new ion channel parameters
cal_gcalbar = 5.73945708921e-06  
can_gcanbar = 4.74427101753e-06
//cat_gcatbar = 0.0 * 1e-5
calginc = 10
canginc = 100 
kBK_gpeak = 7.25128017201e-05 // original value of 268e-4 too high for this model
kBK_caVhminShift = 46.9679440782 // shift upwards to get lower effect on subthreshold
cadad_depth = 0.102468419281 // original 1; reduced for tighter coupling of ica and cai
cadad_taur = 16.0181691392 

/* *********************************************************** */

// 2010-11-01 Ben Suter
// BS0284 reconstructed in NL with soma as contours,
// then soma contours all selected at once and collectively
// "set as cell body". Saved as .asc file, loaded via Import3D,
// with errors about not connected root branches. I ignored
// these errors, exported to Cell Builder, then exported from
// Cell Builder to HOC. Soma is now a single section.
// All processes attach at soma(0.5).
// //////////////////////////////////////////////////////////////////////////////////////////
//
// //////////////////////////////////////////////////////////////////////////////////////////
// Copyright 2011, Benjamin Suter
// Used in model of corticospinal neuron BS0284 and published as:
//  "Intrinsic electrophysiology of mouse corticospinal neurons: a characteristic set of features embodied in a realistic computational model"
//  by Benjamin Suter, Michele Migliore, and Gordon Shepherd
//  Submitted September 2011
// //////////////////////////////////////////////////////////////////////////////////////////
useharnett = 0 // whether to use the harnett 15 HCN (h_harnett.mod, instead of h_bs.mod)
usekole = 0 // whether to use the kole 2006 HCN (ih_kole.mod, instead of h_bs.mod)
usemigliore = 0  // whether to use the migliore 2012 HCN (ih_migliore.mod, instead of h_bs.mod)

usecahotzone = 1 // whether to include ca 'hot zone' - if so, uses canginc,calginc to scale
// the apical dend cal,can conductances that are between nexus (~300 micron from soma)
// and before tuft (around 600 micron from soma)

begintemplate PTcell 
objref all, somatic, axonal, basal, apical, alldend, spiny, apical_maintrunk, apical_oblique, apical_uppertrunk, apical_tuft, apical_beforebranchpoint, apical_afterbranchpoint, perisom
objref stim, esyn, isyn,nil
public all,somatic,basal,apical,spiny,alldend
public apical_maintrunk, apical_oblique, apical_uppertrunk, apical_tuft, apical_beforebranchpoint, apical_afterbranchpoint, perisom
public lambda_f,geom_nseg,recalculate_x_dist, sethgbar, stim, nc, reconfig
external cap,rall,rm,spinecapfactor,Vrest,h_erev,h_gbar,h_gbar_tuft
external nax_gbar,nax_gbar_axonm,kdr_gbar,kdr_gbar_axonm, nax_gbar_somam, nax_gbar_dendm, mnax
external cal_gcalbar, can_gcanbar, kBK_gpeak, kBK_caVhminShift, cadad_depth, cadad_taur // cat_gcatbar
external kap_gbar,kap_gbar_axonm,p_ek,p_ena
external kdmc_gbar,kdmc_gbar_axonm, calginc, canginc, useharnett, usekole, usemigliore, usecahotzone
double h_lambda[1],nexusdist[1],h_gbar_tuftm[1]
public h_lambda,nexusdist,h_gbar_tuftm
external kdr_vhalfn, kdr_a0n, kdr_nmax
external kap_vhalfn, kap_vhalfl, kap_nmin, kap_lmin, kap_tq
external ghd, slope, half // migliore ih params

public mkstim,soma,axon
//stuff for having an interface like intf6 - not all values might actually be relevant and used for mc
public zloc, type, inhib, record, wrec, jttr, input, vinflg, invl0, jcn, dead, vbr, dbx, flag, out,xloc,col,gid,yloc,id
public wrc,recclr, id, recflag, initrec, fflag, fini, esyn, isyn
public getdvi
objref vidx,vdel,ign1,vwt2,vwt1,vdist
objref esyn,esynd[103],isyn,isynd[103] // leave old syns
objref asynl,nsynl,gsynl,g2synl // ampa,nmda,gabaa,gabab
public asynl,nsynl,gsynl,g2synl // ampa,nmda,gabaa,gabab
create soma, axon, dend[69], apic[103]
public soma,dend,apic,axon
access soma
distance()

proc getdvi(){
  $&1 = vidx
  $&2 = vdel
  $&3 = ign1
  $&4 = vwt1
  $&5 = vwt2
  $&6 = vdist
}

func yloc(){ return 1.0 } // empty funcs
func gid(){ return 1.0 }
func xloc(){ return 1.0 }
func col(){ return 1.0 }
func fini(){ return 1.0 }
func fflag(){ return 0.0 } //return 0 to record APs from soma
func initrec(){ return 1.0 }
func flag(){ return 1.0 }
func recflag(){ return 1.0 }
func wrc(){ return 1.0 }
func recclr(){ return 1.0 }
func clrvspks(){ return 1.0 }

proc topol() { local i
  connect axon(0), soma(0) // 2011-12-08 axon starts at base now, was: connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  connect dend[4](0), dend(1)
  for i = 5, 6 connect dend[i](0), soma(0.5)
  for i = 7, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  connect dend[13](0), dend[7](1)
  for i = 14, 15 connect dend[i](0), dend[i-1](1)
  connect dend[16](0), dend[14](1)
  connect dend[17](0), dend[13](1)
  connect dend[18](0), dend[6](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  connect dend[21](0), soma(0.5)
  for i = 22, 23 connect dend[i](0), dend[21](1)
  connect dend[24](0), soma(0.5)
  connect dend[25](0), dend[24](1)
  for i = 26, 27 connect dend[i](0), soma(0.5)
  for i = 28, 29 connect dend[i](0), dend[i-1](1)
  connect dend[30](0), dend[28](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  connect dend[33](0), dend[27](1)
  for i = 34, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  connect dend[37](0), dend[33](1)
  connect dend[38](0), soma(0.5)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  for i = 41, 42 connect dend[i](0), dend[40](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), dend[44](1)
  connect dend[47](0), soma(0.5)
  for i = 48, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  for i = 52, 53 connect dend[i](0), dend[51](1)
  for i = 54, 55 connect dend[i](0), dend[53](1)
  for i = 56, 57 connect dend[i](0), soma(0.5)
  for i = 58, 59 connect dend[i](0), dend[57](1)
  connect dend[60](0), soma(0.5)
  for i = 61, 62 connect dend[i](0), dend[60](1)
  connect dend[63](0), soma(0.5)
  for i = 64, 65 connect dend[i](0), dend[63](1)
  connect dend[66](0), soma(0.5)
  for i = 67, 68 connect dend[i](0), dend[66](1)
  connect apic(0), soma(1)  // 2011-12-08 apical starts at apex now, was: connect apic(0), soma(0.5)
  for i = 1, 26 connect apic[i](0), apic[i-1](1)
  connect apic[27](0), apic[25](1)
  for i = 28, 29 connect apic[i](0), apic[27](1)
  for i = 30, 31 connect apic[i](0), apic[29](1)
  connect apic[32](0), apic[24](1)
  for i = 33, 35 connect apic[i](0), apic[i-1](1)
  connect apic[36](0), apic[34](1)
  connect apic[37](0), apic[33](1)
  for i = 38, 39 connect apic[i](0), apic[i-1](1)
  connect apic[40](0), apic[38](1)
  connect apic[41](0), apic[37](1)
  for i = 42, 43 connect apic[i](0), apic[41](1)
  for i = 44, 45 connect apic[i](0), apic[43](1)
  connect apic[46](0), apic[32](1)
  for i = 47, 48 connect apic[i](0), apic[i-1](1)
  connect apic[49](0), apic[47](1)
  connect apic[50](0), apic[46](1)
  connect apic[51](0), apic[23](1)
  connect apic[52](0), apic[22](1)
  for i = 53, 56 connect apic[i](0), apic[i-1](1)
  connect apic[57](0), apic[55](1)
  connect apic[58](0), apic[54](1)
  for i = 59, 60 connect apic[i](0), apic[58](1)
  connect apic[61](0), apic[53](1)
  for i = 62, 64 connect apic[i](0), apic[i-1](1)
  connect apic[65](0), apic[63](1)
  for i = 66, 67 connect apic[i](0), apic[65](1)
  connect apic[68](0), apic[62](1)
  connect apic[69](0), apic[61](1)
  for i = 70, 71 connect apic[i](0), apic[i-1](1)
  connect apic[72](0), apic[70](1)
  connect apic[73](0), apic[69](1)
  for i = 74, 75 connect apic[i](0), apic[73](1)
  for i = 76, 77 connect apic[i](0), apic[75](1)
  connect apic[78](0), apic[52](1)
  connect apic[79](0), apic[21](1)
  connect apic[80](0), apic[20](1)
  connect apic[81](0), apic[19](1)
  connect apic[82](0), apic[18](1)
  connect apic[83](0), apic[17](1)
  connect apic[84](0), apic[16](1)
  connect apic[85](0), apic[15](1)
  connect apic[86](0), apic[14](1)
  connect apic[87](0), apic[13](1)
  connect apic[88](0), apic[12](1)
  connect apic[89](0), apic[11](1)
  connect apic[90](0), apic[10](1)
  connect apic[91](0), apic[9](1)
  connect apic[92](0), apic[8](1)
  connect apic[93](0), apic[7](1)
  connect apic[94](0), apic[6](1)
  connect apic[95](0), apic[5](1)
  connect apic[96](0), apic[4](1)
  connect apic[97](0), apic[3](1)
  connect apic[98](0), apic[2](1)
  connect apic[99](0), apic[1](1)
  for i = 100, 101 connect apic[i](0), apic[99](1)
  connect apic[102](0), apic(1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
    pt3dadd(216.294, -825.836, -85, 2.32638)
    pt3dadd(216.184, -823.347, -87.87, 7.87308)
    pt3dadd(216.283, -822.396, -90.73, 10.2763)
    pt3dadd(216.548, -821.017, -93.6, 11.7817)
    pt3dadd(216.515, -820.721, -96.46, 12.6242)
    pt3dadd(216.666, -820.381, -98.37, 14.5434)
    pt3dadd(216.289, -819.116, -100.28, 14.5887)
    pt3dadd(215.755, -818.224, -102.19, 15.8271)
    pt3dadd(215.842, -818.891, -104.1, 16.0252)
    pt3dadd(215.749, -818.464, -106.01, 16.5298)
    pt3dadd(215.948, -818.57, -107.92, 16.8686)
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  }
}
proc shape3d_2() {
  axon {    pt3dadd(170.11, -1252.98, -88.82, 0.83)
    pt3dadd(171.14, -1256.36, -80.23, 0.83)
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  }
}
proc shape3d_3() {
  dend[16] {    pt3dadd(195.58, -880.16, -58.26, 0.69)
    pt3dadd(195.21, -883.59, -58.26, 0.69)
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  }
}
proc shape3d_4() {
  dend[26] {    pt3dadd(209.85, -823.3, -96.46, 0.64)
    pt3dadd(208.91, -823.44, -96.46, 0.64)
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  }
}
proc shape3d_5() {
  dend[40] {    pt3dadd(229.58, -837.57, -107.92, 1.25)
  }
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  }
}
proc shape3d_6() {
  dend[56] {    pt3dadd(169.56, -833.79, -106.97, 0.69)
    pt3dadd(164.72, -836.35, -103.15, 0.8)
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  }
}
proc shape3d_7() {
  apic[3] {  }
  apic[4] {pt3dclear()
    pt3dadd(203.39, -762.28, -95.51, 2.02)
    pt3dadd(203.44, -761.14, -94.55, 2.02)
  }
  apic[5] {pt3dclear()
    pt3dadd(203.44, -761.14, -94.55, 1.7)
    pt3dadd(202.8, -756.34, -95.51, 1.7)
    pt3dadd(202.8, -755.65, -93.6, 1.65)
  }
  apic[6] {pt3dclear()
    pt3dadd(202.8, -755.65, -93.6, 1.65)
    pt3dadd(203.41, -747.53, -96.46, 1.65)
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  }
}
proc shape3d_8() {
  apic[30] {    pt3dadd(280.25, -166.68, -62.08, 0.61)
    pt3dadd(280.15, -166.01, -64.95, 0.61)
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  }
}
proc shape3d_9() {
  apic[41] {    pt3dadd(173.47, -201.14, -115.56, 0.75)
    pt3dadd(173.9, -199.65, -115.56, 0.72)
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  }
}
proc shape3d_10() {
  apic[52] {  }
  apic[53] {pt3dclear()
    pt3dadd(192, -539.17, -104.1, 1.01)
    pt3dadd(192.72, -537.44, -106.01, 1.01)
    pt3dadd(193.54, -533.61, -106.01, 0.99)
    pt3dadd(193.17, -529.77, -107.92, 0.99)
    pt3dadd(194.18, -526.18, -107.92, 1.04)
    pt3dadd(194.21, -522.26, -107.92, 1.04)
    pt3dadd(196.69, -515.18, -106.97, 1.04)
    pt3dadd(197.46, -510.42, -106.97, 1.01)
    pt3dadd(196.98, -506.53, -110.79, 1.01)
    pt3dadd(197.75, -502, -110.79, 1.01)
    pt3dadd(199.24, -499.58, -110.79, 1.07)
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  }
}
proc shape3d_11() {
  apic[67] {    pt3dadd(240.54, -96.96, -59.21, 0.51)
    pt3dadd(240.62, -95.84, -55.39, 0.51)
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  }
}
proc shape3d_12() {
  apic[80] {    pt3dadd(223.34, -624.88, -56.35, 0.8)
    pt3dadd(227.2, -624.51, -48.71, 0.69)
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  }
}
proc shape3d_13() {
  apic[90] {    pt3dadd(127.53, -703.6, -89.78, 0.64)
  }
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  }
}
proc shape3d_14() {
  apic[101] {   pt3dadd(140.91, -763.36, -46.8, 0.56)
    pt3dadd(140.48, -763.89, -47.75, 0.53)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
}

proc subsets () { local i 
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 68 dend[i] all.append()
    for i=0, 102 apic[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 68 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 102 apic[i] apical.append()

  alldend = new SectionList()
    for i=0, 68 dend[i] alldend.append()
    for i=0, 102 apic[i] alldend.append()

  // spiny sections include all basal dendrites
  // and all but the proximal trunk of the apical dendrites
  // 2010-11-03 Ben Suter
  spiny = new SectionList()
    for i=2, 102 apic[i] spiny.append()
    for i=0, 68 dend[i] spiny.append()

  apical_maintrunk = new SectionList()
    for i=0, 22 apic[i] apical_maintrunk.append()

  apical_oblique = new SectionList()
    for i=79, 102 apic[i] apical_oblique.append()

  // Definition of "upper trunk" and "tuft" are subjective, and
  // are more or less clear depending on the specific neuron.
  // If we decide to treat these two subgroups differentially,
  // we'll need to revisit the choice I've made below.
  apical_uppertrunk = new SectionList()
    apic[23] apical_uppertrunk.append()
    apic[24] apical_uppertrunk.append()
    apic[25] apical_uppertrunk.append()
    apic[32] apical_uppertrunk.append()
    apic[33] apical_uppertrunk.append()
    apic[46] apical_uppertrunk.append()
    apic[51] apical_uppertrunk.append()
    apic[52] apical_uppertrunk.append()
    apic[53] apical_uppertrunk.append()
    apic[78] apical_uppertrunk.append()

  apical_tuft = new SectionList()
    for i=26, 31 apic[i] apical_tuft.append()
    for i=34, 45 apic[i] apical_tuft.append()
    for i=47, 50 apic[i] apical_tuft.append()
    for i=54, 77 apic[i] apical_tuft.append()

  // In this neuron, all the obliques occur below the main branch point,
  // but this is not necessarily the case in general.
  apical_beforebranchpoint = new SectionList()
    forsec apical_maintrunk apical_beforebranchpoint.append()
    forsec apical_oblique apical_beforebranchpoint.append()

  apical_afterbranchpoint = new SectionList()
    forsec apical_uppertrunk apical_afterbranchpoint.append()
    forsec apical_tuft apical_afterbranchpoint.append()

  // within ~100 um of soma -- based on "Perisomatic inhibition" - TF Freund 2007
  perisom = new SectionList()
    soma perisom.append()
    for i = 0,8 apic[i] perisom.append()
    apic[96] perisom.append()
    apic[99] perisom.append()
    for i = 0,15 dend[i] perisom.append()
    for i = 17,45 dend[i] perisom.append()
    for i = 47,53 dend[i] perisom.append()
    for i = 56,68 dend[i] perisom.append()    
}

func lambda_f () { local i, x1, x2, d1, d2, lam, freq, d_lambda
  // these are reasonable values for most models
  freq = 100      // Hz, frequency at which AC length constant will be computed
  d_lambda = 0.1

  if (n3d() < 2) { return 1e5*sqrt(diam/(4*PI*$1*Ra*cm)) }
  // above was too inaccurate with large variation in 3d diameter
  // so now we use all 3-d points to get a better approximate lambda
  x1 = arc3d(0)
  d1 = diam3d(0)
  lam = 0
  for i=1, n3d()-1 {
    x2 = arc3d(i)
    d2 = diam3d(i)
    lam += (x2 - x1)/sqrt(d1 + d2)
    x1 = x2   d1 = d2
  }
  //  length of the section in units of lambda
  lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm) 
  return L/lam
}

proc geom_nseg() { local freq, d_lambda, before, after, tmp
  // these are reasonable values for most models
  freq = 100      // Hz, frequency at which AC length constant will be computed
  d_lambda = 0.1
  before = 0
  forall { before = before + nseg }
  soma area(0.5) // make sure diam reflects 3d points
  forall { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  }
  after = 0
  forall { after = after + nseg }
  // print "geom_nseg: changed from ", before, " to ", after, " total segments"
}

proc optimize_nseg () { // Ra, cm, spinecapfactor
    // use worst case Ra, cm values
    forall {
        Ra = $1
        cm = $2
    }
    forsec spiny {
        cm = $3 * cm  // spinecapfactor * cm
        g_pas = $3 / rm // spinecapfactor * (1.0/rm)
    }
    // optimize # of segments per section (do this afer setting Ra, cm)
    geom_nseg()
    // need to reassign distances after changing nseg
    recalculate_x_dist()
}

// Note: It is important to call this function BEFORE multisplit,
// which means making sure to load any parallel GUI .ses
// only AFTER this function has been called.
proc recalculate_x_dist () { local nd
    soma distance(0, 0.5) // set the center of the soma as origin
    forall {
        for (s) x_savedist(s) = distance(s)
    }
    nexusdist = 1e9 // calculate distance to tuft here 
    forsec apical_uppertrunk { // apical_tuft 
      for (s) {
        nd = distance(s)
        if(nd < nexusdist) nexusdist = nd        
      }
    }
}

proc addapicchan () {
  forsec apical {
    insert ca_ion
    insert cadad // cadad.mod
    insert cal // cal_mig.mod
    insert can // can_mig.mod
    // insert cat // cat_mig.mod
    insert kBK // kBK.mod
  }
}

proc apicchanprop () {
  setgcalbarcald()
  setgcanbarcand()
  // gcatbar_cat = cat_gcatbar
  forsec apical {
    gpeak_kBK = kBK_gpeak
    caVhmin_kBK = -46.08 + kBK_caVhminShift
    depth_cadad = cadad_depth
    taur_cadad = cadad_taur
  }
}

proc addbasalchan () {
  forsec basal {
    insert ca_ion
    insert cadad
    insert cal
    //insert cat
    insert can
    insert kBK
  }
}

proc basalchanprop () {
  forsec basal {
    gcalbar_cal = cal_gcalbar
    gcanbar_can = can_gcanbar
    // gcatbar_cat = cat_gcatbar
    gpeak_kBK = kBK_gpeak
    caVhmin_kBK = -46.08 + kBK_caVhminShift
    depth_cadad = cadad_depth
    taur_cadad = cadad_taur
  }
}

proc init_once() {  
  forall { // forall within an object just accesses the sections belonging to the object
    insert pas        // passive
    insert savedist        // mechanism to keep track of distance from soma even after multisplit
    if (useharnett) {
      insert h15        // h-current in h_harnett.mod
    } else if (usekole) { 
      insert ih // h-current in Ih_kole.mod
    } else if (usemigliore) { 
      insert hd // h-current in Ih_migliore.mod
      ehd_hd=-30 // params taken from Migliore 2012 modeldb (fig-5a.hoc)
      elk_hd=-65.61
      clk_hd=0.7
    } else {
      insert h           // h-current in h_bs.mod
    }
    insert nax       // Na current
    insert kdr        // K delayed rectifier current
    insert kap        // K-A current
    insert k_ion
    insert na_ion   
  }
  setallprop()
  addapicchan()
  addbasalchan()
  forsec spiny {
    cm = spinecapfactor * cm
    // Adjust g_pas to compensate, to keep same time constant
    // This is new as of 2011-02-14, because last week Michele Migliore said that
    // the idea of a spine factor is to "add more membrane".
    // I'm not sure about this, though, I thought I saw models that just
    // increase the capacitance.
    g_pas = spinecapfactor / rm
  }
  optimize_nseg(rall, cap, spinecapfactor)
  apicchanprop()
  basalchanprop()
  setgbarnaxd() // nax in apic,basal dends
  setgbarkapd() // kap in apic,basal dends
  setgbarkdrd() // kdr in apic,basal dends
  sethgbar() // distributes HCN conductance
  soma { // K-D current in soma and axon only
    insert kdmc
    insert ca_ion
    insert cadad
    insert cal
    // insert cat
    insert can
    insert kBK
  }
  setsomag() 
  forsec "axon" {     // axon has I_KD, and more I_Na, I_KA, I_KDR, and no I_h
    // K-D current in soma and axon only
    insert kdmc
  }
  setaxong() // set conductance values for axon
}

proc reconfig () {
  setallprop() // set initial properties, including g_pas,e_pas,cm,Ra,etc.
  optimize_nseg(rall, cap, spinecapfactor) // set nseg based on passive properties
  apicchanprop() //  initial apic dend properties
  basalchanprop() // initial basal dend properties
  setgbarnaxd() // nax in apic,basal dends
  setgbarkapd() // kap in apic,basal dends
  setgbarkdrd() // kdr in apic,basal dends
  sethgbar() // h in all locations
  setsomag() // soma-specific conductance values
  setaxong() // axon-specific conductance values
}

proc setallprop () {
  forall {
    // passive
    g_pas       = 1/rm
    Ra          = rall
    cm          = cap
    e_pas       = Vrest
    // h-current
    if (useharnett) {
      erev_h15 = h_erev
    } else if(usekole) {
      erev_ih      = h_erev
    } else if(usemigliore) {
      erev_hd      = h_erev
    } else {
      erev_h      = h_erev
    }
    // Na current
    gbar_nax    = nax_gbar

    // K delayed rectifier current
    gbar_kdr    = kdr_gbar
    vhalfn_kdr  = kdr_vhalfn
    a0n_kdr     = kdr_a0n
    nmax_kdr    = kdr_nmax

    // K-A current
    gbar_kap    = kap_gbar
    vhalfn_kap  = kap_vhalfn
    vhalfl_kap  = kap_vhalfl
    nmin_kap    = kap_nmin
    lmin_kap    = kap_lmin
    tq_kap      = kap_tq

    // reversal potentials
    ena         = p_ena
    ek          = p_ek
  }
}

proc setsomag () {
  soma {
    gbar_kdmc = kdmc_gbar
    gcalbar_cal = cal_gcalbar
    gcanbar_can = can_gcanbar
    // gcatbar_cat = cat_gcatbar
    gpeak_kBK = kBK_gpeak
    caVhmin_kBK = -46.08 + kBK_caVhminShift
    depth_cadad = cadad_depth
    taur_cadad = cadad_taur
    gbar_nax = nax_gbar * nax_gbar_somam
  }
}

proc setaxong () {     // axon has I_KD, and more I_Na, I_KA, I_KDR, and no I_h
  forsec "axon" {
    // axon has no Ih
    if (useharnett) {
      gbar_h15   = 0
    } else if(usekole) {
      gbar_ih = 0
    } else if(usemigliore) {
      gbar_hd = 0
    } else {
      gbar_h      = 0
    }
    // increase the I_Na, I_Ka, I_KD and I_KDR
    gbar_nax    = nax_gbar_axonm * nax_gbar
    gbar_kap    = kap_gbar_axonm * kap_gbar
    gbar_kdmc   = kdmc_gbar_axonm * kdmc_gbar
    gbar_kdr    = kdr_gbar_axonm * kdr_gbar
  }
}

proc setgbarnaxd () { local gnaxlin
  if (mnax != 0) {
    forsec alldend {
      for(x,0) {
        gnaxlin = nax_gbar*nax_gbar_dendm - mnax*x_savedist(x)
        if (gnaxlin < 0) {
          gnaxlin = 0
          print "setting gnaxlin to 0 at distance of ", x_savedist(x)
        }
        gbar_nax = gnaxlin
      }
    }
  } else {
    forsec alldend {
      gbar_nax = nax_gbar * nax_gbar_dendm
    }
  }
}

proc setgbarkapd () {
  forsec alldend {
    gbar_kap = kap_gbar
  }
}

proc setgbarkdrd () {
  forsec alldend {
    gbar_kdr = kdr_gbar
  }
}

proc setgcalbarcald () { 
  if (usecahotzone) {
    forsec apical {
      for(x,0) {
        if (x_savedist(x) >= nexusdist+10 && x_savedist(x) <= 610) {
          gcalbar_cal(x) = cal_gcalbar * calginc
        } else {
          gcalbar_cal(x) = cal_gcalbar
        }
      }
    }
  } else {
    forsec apical {
      gcalbar_cal = cal_gcalbar
    }
  }
}

proc setgcanbarcand () { 
  if (usecahotzone) {
    forsec apical {
      for(x,0) {
        if (x_savedist(x) >= nexusdist+10 && x_savedist(x) <= 610) {
          gcanbar_can(x) = can_gcanbar * canginc
        } else {
          gcanbar_can(x) = can_gcanbar
        }
      }
    }
  } else {
    forsec apical {
      gcanbar_can = can_gcanbar
    }
  }
}

// proc setgcatbarcatd () {
// forsec apical {
//   for(x,0) {
//     if (x_dist(x) > 750) {
//       gcatbar_cat(x) = cat_gcatbar * calginc
//     } else {
//       gcatbar_cat(x) = cat_gcatbar
//     }
//   }
// }
// }

// h-current distribution
proc sethgbar () { local xd
  h_gbar_tuftm = h_gbar_tuft / h_gbar
  h_lambda = nexusdist / log(h_gbar_tuftm)
  // Harnnet h-current
  if (useharnett) {
    soma gbar_h15 = h_gbar
    forsec basal gbar_h15 = h_gbar
    forsec apical_oblique gbar_h15 = h_gbar
    forsec apical_maintrunk { // locations where increases exp
      for(x,0) {
        xd = x_savedist(x)
        if(xd <= nexusdist) {
          gbar_h15(x) = h_gbar*exp(x_savedist(x)/h_lambda)
        } else { // this else should not happen...
          print xd , " > " , nexusdist
          gbar_h15(x) = h_gbar_tuft // but if main trunk extends slightly beyond branchpoint, should be OK...
        }
        if ( gbar_h15(x) < 0 ) { gbar_h(x) = 0 } // conductance must not be negative
      }
    }
    forsec apical_uppertrunk gbar_h15 = h_gbar * h_gbar_tuftm // uniform here but larger 
    forsec apical_tuft gbar_h15 = h_gbar * h_gbar_tuftm // uniform here but larger 
  // Kole h-current
  } else if(usekole) {
    soma gbar_ih = h_gbar
    forsec basal gbar_ih = h_gbar
    forsec apical_oblique gbar_ih = h_gbar
    forsec apical_maintrunk { // locations where increases exp
      for(x,0) {
        xd = x_savedist(x)
        if(xd <= nexusdist) {
          gbar_ih(x) = h_gbar*exp(x_savedist(x)/h_lambda)
        } else { // this else should not happen...
          print xd , " > " , nexusdist
          gbar_ih(x) = h_gbar_tuft // but if main trunk extends slightly beyond branchpoint, should be OK...
        }
        if ( gbar_ih(x) < 0 ) { gbar_ih(x) = 0 } // conductance must not be negative
      }
    }
    forsec apical_uppertrunk gbar_ih = h_gbar * h_gbar_tuftm // uniform here but larger 
    forsec apical_tuft gbar_ih = h_gbar * h_gbar_tuftm // uniform here but larger 

  // Migliore h-current
  } else if(usemigliore) {
    // // MIGLIORE DISTRIBUTION
    soma gbar_hd=ghd*(1+100/(1+exp(half/slope)))
    soma vhalfl_hd = -82 // from Migliore 2012, fig-5a.hoc
    distance()
    forsec basal {
      vhalfl_hd = -82  // from Migliore 2012, fig-5a.hoc
      for (x,0) { // from Migliore 2012, fig-5a.hoc
        xdist = distance(x)
        gbar_hd=ghd*(1+100/(1+exp(half/slope)))
        if (xdist > 100){
          vhalfl_hd=-90
        } else {
          vhalfl_hd=-82
        }
      }

    }
    // from Migliore 2012, fig-5a.hoc
    forsec apical {
      for (x,0) { 
        xdist = distance(x)
        gbar_hd(x) = ghd*(1+100/(1+exp((half-xdist)/slope)))
        if (xdist > 100){
          vhalfl_hd=-90
        } else {
          vhalfl_hd=-82
        }
      }
    }

    // BEN/SAM DISTRIBUTION
    // soma gbar_hd = h_gbar
    // forsec basal gbar_hd = h_gbar
    // forsec apical_oblique gbar_hd = h_gbar
    // forsec apical_maintrunk { // locations where increases exp
    //   for(x,0) {
    //     xd = x_savedist(x)
    //     if(xd <= nexusdist) {
    //       gbar_hd(x) = h_gbar*exp(x_savedist(x)/h_lambda)
    //     } else { // this else should not happen...
    //       print xd , " > " , nexusdist
    //       gbar_hd(x) = h_gbar_tuft // but if main trunk extends slightly beyond branchpoint, should be OK...
    //     }
    //     if ( gbar_hd(x) < 0 ) { gbar_hd(x) = 0 } // conductance must not be negative
    //   }
    // }
    // forsec apical_uppertrunk gbar_hd = h_gbar * h_gbar_tuftm // uniform here but larger 
    // forsec apical_tuft gbar_hd = h_gbar * h_gbar_tuftm // uniform here but larger 

  // BS h-current
  } else {  
    soma gbar_h = h_gbar
    forsec basal gbar_h = h_gbar
    forsec apical_oblique gbar_h = h_gbar
    forsec apical_maintrunk { // locations where increases exp
      for(x,0) {
        xd = x_savedist(x)
        if(xd <= nexusdist) {
          gbar_h(x) = h_gbar*exp(x_savedist(x)/h_lambda)
        } else { // this else should not happen...
          print xd , " > " , nexusdist
          gbar_h(x) = h_gbar_tuft // but if main trunk extends slightly beyond branchpoint, should be OK...
        }
        if ( gbar_h(x) < 0 ) { gbar_h(x) = 0 } // conductance must not be negative
      }
    }
    forsec apical_uppertrunk gbar_h = h_gbar * h_gbar_tuftm // uniform here but larger 
    forsec apical_tuft gbar_h = h_gbar * h_gbar_tuftm // uniform here but larger 
  }

}

proc init_extra() {
    // hook for on-the-fly changes
    // override this function def at command-line as needed
    // e.g. if you wish to tune/optimize, call init_once() here
}

proc mkstim () {
  soma {
//    stim = new IClamp(0.5)
    // stim.amp    = curr
    // stim.dur    = 1000
    // stim.del    = 1500 // with 1 sec fake padding at start for Ih equilibration
  }
}

proc celldef () {
  topol()
  subsets()
  // geom_nseg()
}

proc setsyns () { localobj syn
  asynl=new List() nsynl=new List() gsynl=new List() g2synl=new List()
  if (0) {
    soma esyn = new Exp2Syn(0.5)
    soma isyn = new Exp2Syn(0.5)
    {esyn.e=0 esyn.tau1=0.05 esyn.tau2=5.3}
    {isyn.e=-80 isyn.tau1=0.07 isyn.tau2=9.1}
    for i = 0,102 {
      apic[i] esynd[i] = new Exp2Syn(0.5)
      apic[i] isynd[i] = new Exp2Syn(0.5)
      {esynd[i].e=0 esynd[i].tau1=0.05 esynd[i].tau2=5.3}
      {isynd[i].e=-80 isynd[i].tau1=0.07 isynd[i].tau2=9.1}
    }
  }
}

proc init () {local b,i,ihMod
  // zloc = $1
  // type = $2
  // id = $3
  ihMod = $1
  slope = $2
  if (ihMod == 1) {useharnett=1 // whether to use the harnett 15 HCN (h_harnett.mod, instead of h_bs.mod)
  } else if (ihMod == 2) {usekole=1  // whether to use the kole 2006 HCN (ih_kole.mod, instead of h_bs.mod)
  } else if (ihMod == 3) {usemigliore=1} // whether to use the migliore 2012 HCN (ih_migliore.mod, instead of h_bs.mod)
  access soma
  celldef()
  access soma
  distance()
  init_once()
  //setsyns()
}

endtemplate PTcell

