begintemplate L5PCbiophys
public biophys
proc biophys() {
  forsec $o1.all {
    insert pas
    insert kap
    insert kdr
    insert hd
    
    cm = 0.700445928608//1
    Ra = 114.51049//137.494564931//114.51049//100//137.494564931//114.51049//137.494564931//90//114.510490019// morph.py: 137.494564931//114.510490019//orig:100
    e_pas = -90.220509483//-88.5366550238//-90.220509483//orig:-90
    g_pas = (1/38457.4393085)
    
    insert na_ion
    insert k_ion
    
    // ion mech params
    ena = 42
    ina = 10
    ona = 40
    
    ik = 54.4
    ek = -104
    ok = 2.5
    
    // global
    vhalfn_kdr = 13
    nmax_kdr = 20
    a0n_kdr     = 0.0075

    // K-A current
    vhalfn_kap  = 35 // def 11
    vhalfl_kap  = -56
    nmin_kap    = 0.4
    lmin_kap    = 5
    tq_kap = -45
    
    // H-current Migliore
    ehd_hd=-30 // params taken from Migliore 2012 modeldb (fig-5a.hoc)
    elk_hd=-65.61
    clk_hd=0.7
    

    
    //insert k_ion // zc
    //insert na_ion // zc

  }

  forsec $o1.somatic {
      // ZC biophys
      //e_pas = -88.5366550238
      //Ra = 100//137.494564931//114.510490019 //Ra all for M1
      //cm = 1.78829677463 // soma Capictance
      //g_pas = (1/38457.4393085)//*0.01//(1/38457.4393085)//(1/18501.7540916) // 1 / soma membrane resistance
      // Na
      //insert na_ion
      //ena = 42.0
      insert nax
      gbar_nax = 0.0345117294903 * (5.0 * 1.05)//5.0 // 0.0153130368342 * 7.5//0.0345117294903
      // K
      //insert k_ion
      //ek = -104.0
      //insert kdr // K delayed rectifier current
      gbar_kdr = 0.0084715576279//0.0084715576279 * (5 * 1.5)//* 5.0//* 7.5//0.0131103978049
      //vhalfn_kdr = 13//11.6427471384// KDR kinetics
      insert kdmc //zc K-D current in soma & axon only
      gbar_kdmc = 0.001109073//* 20 //0.00110907315064 * 30//0.000404311891107
      //insert kap // zc K-A current
      gbar_kap = 0.0614003391814//0.089860024639 * (5 * 1.05) //0.0614003391814 * 7.5//0.0898600246397
      //vhalfn_kap = 35//32.7885075379// K-A kinetics
      //vhalfl_kap = -56//-59.7867409796
      tq_kap = -45//-52.0967985869
      insert kBK // ca and v dependent k channel
		  gpeak_kBK = 7.25128017201e-05//5.09733585163e-05//7.25128017201e-05//5.09733585163e-05
			caVhmin_kBK = -46.08 + 46.9679440782//43.8900261407 //kBK_caVhminShift
      // Ca
      insert ca_ion
      eca = 132.4579342
      ica = 5.00E-05 //axon is diff
      oca = 2
      insert cal
      gcalbar_cal = 4.41583533572e-06
      insert can
			gcanbar_can = 4.60717910591e-06
      insert cadad // calcium decay
			depth_cadad = 0.102468419281//0.119408607923
			taur_cadad = 16.0181691392//99.1146852282
      // h-current
      //insert ih
			//rev_ih = -37.0 // Ih
			//gbar_ih = 6.6129403774e-05//0.000140956438043
      //h channel
      //insert hd
      ehd_hd=-30 // params taken from Migliore 2012 modeldb (fig-5a.hoc)
      elk_hd=-65.61
      clk_hd=0.7
      erev_hd = -37
      // params for migliore h-current distribution
      //ghd = 6.0e-5  // similar to h_gbar used above = 6e-5
      //slope = 14*2.5
      //half = 265 // leads to max sigmoid value of ~0.006 from nexus (~297um) to tuft; similar to h_gbar_tuft
      // // MIGLIORE DISTRIBUTION
      gbar_hd=6.0e-5*(1+100/(1+exp(265/(14*2.5))))
      vhalfl_hd = -82 // from Migliore 2012, fig-5a.hoc
      distance() // to calculate distance

      
      // hay et all biophys
  	  //insert Ca_LVAst// from hay
	    //insert Ca_HVA // from hay
      //insert CaDynamics_E2
      //insert Ih
      //insert SK_E2
      //ek = -85
      //ena = 50
      //gIhbar_Ih = 0.0002
      //g_pas = 0.0000338
      //decay_CaDynamics_E2 = 460.0
      //gamma_CaDynamics_E2 = 0.000501
      //gCa_LVAstbar_Ca_LVAst = 0.00343
      //gCa_HVAbar_Ca_HVA = 0.000992
      // sodium
   	  //insert Nap_Et2 
      //insert NaTa_t
      //gNap_Et2bar_Nap_Et2 = 0.00172 
      //gNaTa_tbar_NaTa_t = 2.04 
      // potassium
      //gSKv3_1bar_SKv3_1 = 0.693  // kdr
      //gK_Tstbar_K_Tst = 0.0812  // kap?
      //gK_Pstbar_K_Pst = 0.00223  // kdmc?
      //gSK_E2bar_SK_E2 = 0.0441  // SK_E2 remains the same
  }

	forsec $o1.apical {
    //spinecapfactor = 1.48057846279
    // cap = 0.700445928608
    Ra = 137
		cm = 1.48057846279 * 0.700445928608//2//Neymotin detailed:1.48057846279 * 0.700445928608 // spinecapfactor * cap 1.03418636866 //orig:2
    g_pas = 1.48057846279 / 38457.4393085//0.0000589//Neymotin_detailed:1.48057846279 / 38457.4393085 //spinecapfactor/rm 1/38457.4393085 //0.0000589//  neymotin:1/10751.193413 //orig:0.0000589
		insert Ih
  	insert SK_E2 
  	insert Ca_LVAst 
  	insert Ca_HVA 
  	insert SKv3_1 
  	insert NaTa_t 
  	insert Im 
  	insert CaDynamics_E2
		ek = -104.0//orig:-85
		ena = 42.0//orig:50
    decay_CaDynamics_E2 = 122 
    gamma_CaDynamics_E2 = 0.000509 
    gSK_E2bar_SK_E2 = 0.0012 //* 2 // calcium-gated potassium channel
  	gSKv3_1bar_SKv3_1 = 0.000261 * 2//* 3 // voltage-gated potassium channel
  	gNaTa_tbar_NaTa_t = 0.0213 * 1.25//* 1.25 //* 2//* 3
  	gImbar_Im = 0.0000675 * 3
 
// for F/I 
    for (x,0) { 
        xdist = distance(x)
        if (xdist > 100){
          gSK_E2bar_SK_E2 = 0.0012 //* 2
        	gSKv3_1bar_SKv3_1 = 0.000261//* 6//* 3
        	gNaTa_tbar_NaTa_t = 0.0213 * 3//* 1.25//* 3
        	gImbar_Im = 0.0000675
        } else {
          gSK_E2bar_SK_E2 = 0.0012 //* 2 // calcium-gated potassium channel
        	gSKv3_1bar_SKv3_1 = 0.000261 * 2//* 3 // voltage-gated potassium channel
        	gNaTa_tbar_NaTa_t = 0.0213 * 1.25//* 1.25 //* 2//* 3
        	gImbar_Im = 0.0000675 * 3
        }
      }
   
    //insert kdr
    gbar_kdr = 0
    //insert kap // K-A current
    gbar_kap = 0//0.00000614003391814 * 1.25// 100 //-45
    //vhalfn_kap  = -56 //35 // def 11
    //vhalfl_kap  = 0   //-56
    //nmin_kap    = 0.4
    //lmin_kap    = 5
    //tq_kap = -3.85E-05
    //sh_kap = 0.061400339
    insert nax
    gbar_nax = 0
    //sh_nax = 16.01816914
    insert kdmc
    gbar_kdmc = 0 
    
    insert ca_ion
    eca = 132.4579342
    ica = 5.00E-05 //axon is diff
    oca = 2
    // H-current Migliore
    for (x,0) { 
        xdist = distance(x)
        gbar_hd(x) = 6.0e-5*(1+100/(1+exp((265-xdist)/(14*2.5)))) //ghd =6.0e-5 //slope = 14*2.5 //half = 265
        if (xdist > 100){
          vhalfl_hd=-90
        } else {
          vhalfl_hd=-82
        }
      }
	}

  // More Apical
	//$o1.distribute_channels("apic","gIhbar_Ih",2,-0.8696,3.6161,0.0,2.0870,0.00020000000) 
	$o1.distribute_channels("apic","gCa_LVAstbar_Ca_LVAst",3,1.000000,0.010000,685.000000,885.000000,0.0187000000) 
	$o1.distribute_channels("apic","gCa_HVAbar_Ca_HVA",3,1.000000,0.100000,685.000000,885.000000,0.0005550000) 
	
  forsec $o1.basal {
    Ra = 137.494564931
		cm = 1.48057846279 * 0.700445928608//2//Neymotin detailed: 1.48057846279 * 0.700445928608 // spinecapfactor * cap 1.03418636866 //1.89771901209  //orig:2
    g_pas = 1.48057846279 / 38457.4393085//0.0000467//Neymotin detailed: 1.48057846279 / 38457.4393085 //spinecapfactor/rm //0.0000467//neymotin: 1/13123.00174  //orig:0.0000467
    // original
		insert Ih
		gIhbar_Ih = 0.0002
    // Ben added
   	insert SK_E2 
  	insert Ca_LVAst 
  	insert Ca_HVA 
  	insert SKv3_1 
  	insert NaTa_t 
  	insert Im 
  	insert CaDynamics_E2
		ek = -104.0 //orig:-85
		ena = 42.0 //orig:50
    decay_CaDynamics_E2 = 122 
    gamma_CaDynamics_E2 = 0.000509 
    gSK_E2bar_SK_E2 = 0.0012 * 2 //* 2
  	gSKv3_1bar_SKv3_1 = 0.000261 * 2//* 6//* 3
  	gNaTa_tbar_NaTa_t = 0.0213 * 1.25 //* 1.25//* 3
  	gImbar_Im = 0.0000675 * 4
 
// control
//    for (x,0) { 
//        xdist = distance(x)
//        if (xdist > 100){
//          gSK_E2bar_SK_E2 = 0.0012 //* 2
//        	gSKv3_1bar_SKv3_1 = 0.000261//* 6//* 3
//        	gNaTa_tbar_NaTa_t = 0.0213 * 3//* 1.25//* 3
//        	gImbar_Im = 0.0000675
//        } else {
//          gSK_E2bar_SK_E2 = 0.0012 * 2 //* 2
//        	gSKv3_1bar_SKv3_1 = 0.000261 * 2//* 6//* 3
//        	gNaTa_tbar_NaTa_t = 0.0213 * 1.25 //* 1.25//* 3
//        	gImbar_Im = 0.0000675 * 4
//        }
//      }
   
    // Neymotin channels
    insert ca_ion
    eca = 132.4579342
    ica = 5.00E-05 //axon is diff
    oca = 2
    //insert kdr
    gbar_kdr = 0
    //insert kap // K-A current
    gbar_kap = 0 //0.00000614003391814 * 1.25// 100 //-45
    //vhalfn_kap  = -56 //35 // def 11
    //vhalfl_kap  = 0   //-56
    //nmin_kap    = 0.4
    //lmin_kap    = 5
    //tq_kap = -3.85E-05
    //sh_kap = 0.061400339
    insert nax
    gbar_nax = 0
    //sh_nax = 16.01816914
    insert kdmc
    gbar_kdmc = 0
    // Migliore H current
    vhalfl_hd = -82  // from Migliore 2012, fig-5a.hoc
    for (x,0) { // from Migliore 2012, fig-5a.hoc
        xdist = distance(x)
        gbar_hd=6.0e-5*(1+100/(1+exp(265/14*2.5))) //ghd =6.0e-5 //slope = 14*2.5 //half = 265
        if (xdist > 100){
          vhalfl_hd=-90
        } else {
          vhalfl_hd=-82
        }
    }
	}

  forsec $o1.axonal {
    // ZC biophys
		//Ra = 100//114.510490019//50//137.494564931//114.510490019 //Ra all
    g_pas = (1/38457.4393085) //* 0.01//0.75 //3945.2107187 //1 / axon membrane resistance
    //cm = 0.700445928608//1.01280903702 // capacitance
		//e_pas = -90.220509483//-88.5366550238 // passive reversal (mV)
    // Na
    //insert na_ion
    //ica = 54.4
    //eca = -104
    //oca = 2.5
    ik = 0.022181463
		//ena = 42.0 // Na+ current reversal potential (mV)
    insert nax
    gbar_nax = 0.0153130368342 * 5//11?//5//0.0345117294903 (5.0 * 4)//0.0153130368342 * 7.5 //0.0345117294903 * 5.0//nax_gbar_axonm
    // K
    //insert k_ion
    ek = -104.0  // K+ current reversal potential (mV)
    insert kdmc
    gbar_kdmc = 0.00110907315064 * 20//0.000404311891107 * 0.9//(20 *0.15) //0.00110907315064 * 0.75//0.000404311891107 * 20//kdmc_gbar_axonm
    //insert kdr
    gbar_kdr = 0.0084715576279 * 5//0.0084715576279 * (5 * 0.05) //* 0.25 //0.0131103978049 * 5.0//kdr_gbar * kdr_gbar_axonm
    //vhalfn_kdr = 13//11.6427471384 // KDR kinetics
    //insert kap
    gbar_kap = 0.0614003391814 * 5//0.0898600246397 * (5/5)//0.0614003391814 * 7.5 //0.0898600246397 * 5.0//kap_gbar * kap_gbar_axonm
		//vhalfn_kap = 13//32.7885075379 // K-A kinetics
		//vhalfl_kap = 0//-59.7867409796//-56//-59.7867409796
		tq_kap = 0.107191258//-45//-52.0967985869//-45//-52.0967985869
    
    gbar_hd = 0
    insert ca_ion
    // L5PC original biophys
    // g_pas = 0.0000325
	}
}

endtemplate L5PCbiophys